PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test_sketchboard
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Routines
  Routine test_sketchboard
    ImageComponent sketchboard
      image = materials/merge_sort/demo_imgs/white_BG.png
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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    ImageComponent item2
      image = materials/merge_sort/demo_imgs/banana_2.png
      pos = (0.2, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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    ImageComponent item1
      image = materials/merge_sort/demo_imgs/banana_1.png
      pos [set every repeat] = (0, 0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        # Begin Experiment
        def movePicked(mouse, grabbed):
            # Move piece if we already moving that piece
            if grabbed is not None and mouse.isPressedIn(grabbed):
                (u,v) = mouse.getPos()
                if left <= u and u <= right and bot <= v and v <= top:
                    grabbed.pos = (u,v)
                return grabbed
            else:
                # Move newly clicked piece
                for block in blocks:
                    if mouse.isPressedIn(block) and grabbed is not block:
                        return block
      Begin Routine:
        # Begin Routine
        blocks = [item1,item2]
        movingPiece = None
        (x, y) = sketchboard.pos
        (w,h) = sketchboard.size
        top = y+h/2
        bot = y-h/2
        left = x-w/2
        right = x+w/2
      Each Frame:
        # Each Frame
        for block in blocks:
            if mouse.isPressedIn(block) and movingPiece is None:
                movingPiece = block

        movingPiece = movePicked(mouse, movingPiece)
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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  Routine test_sketchboard_2
    ImageComponent item1_2
      image = materials/merge_sort/demo_imgs/banana_1.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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Flow
  Routine test_sketchboard
  Routine test_sketchboard_2
